PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = WythoffsHumanExp
  keyboardBackend = ioHub
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Routines
  Routine make_move
    CodeComponent move_code
      Code Type = Auto->JS
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      Begin Routine:
        event.Mouse(visible=False)

        #timer = core.Clock()
        #timer.reset()

        if npc_start or visibility == 0:
            continueRoutine = False
      Each Frame:
        for square in squares:
            square.draw()

        #if timer.getTime() > move_duration:
        #    continueRoutine = False
      End Routine:
        if row_new == col_new == 0:
            if player_won == None:
                player_won = True
            num_wins = num_wins + 1
            practice_turns.finished = True
            if section == 1:
                turns.finished = True
            if section == 3:
                more_turns.finished = True
            if section == -4:
                tutorial_turns.finished = True
            if section == 4:
                turns_4.finished = True
            continueRoutine = False
    PolygonComponent moving_piece
      fillColor = dodgerblue
      lineColor = dodgerblue
      opacity [set every repeat] = visibility
      pos [set every frame] = ((((1-min(move_duration,t)/move_duration)*col+min(move_duration,t)/move_duration*col_new)-7)/17, (15-((1-min(move_duration,t)/move_duration)*row+min(move_duration,t)/move_duration*row_new)-8)/17)
      saveStartStop = False
      shape = circle
      size = (1/19, 1/19)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = move_duration
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  Routine select_move
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        mouse.setPos(newPos=(0,0))
        event.Mouse(visible=True)

        if npc_start:
            continueRoutine = False

        timer = core.Clock()
        timer.reset()
        RT = 0

        row = row_new
        col = col_new

        mouse_still = True
        mouse_start = mouse.getPos()

        moves = []
        for r in range (row): # vertical moves
            move = (r, col)
            if abs(section) != 4 or int(expInfo['session']) % 2 == 1 or euclid_move((row,col), move):
                moves.append(move)

        for c in range (col): # horiz moves
            move = (row, c)
            if abs(section) != 4 or int(expInfo['session']) % 2 == 1 or euclid_move((row,col), move):
                moves.append(move)

        for d in range(1, min(row, col) + 1): # diag moves
            move = (row - d, col - d)
            if abs(section) != 4:
                moves.append(move)

        for i, square in enumerate(squares):
            if square_coords[i] == (0,0):
                square.fillColor = 'lightgreen'
            elif section > 0 or game > 2:
                if sum(square_coords[i]) % 2 == 0:
                    square.fillColor = 'lightgray'
                else:
                    square.fillColor = 'darkgray'
            elif square_coords[i] in moves:
                if sum(square_coords[i]) % 2 == 0:
                    square.fillColor = (0.6550, 0.8550, 0.6550)
                else:
                    square.fillColor = (0.3255, 0.5255, 0.3255)
      Each Frame:
        # record mouse move onset time (RT)
        if mouse_still and any(mouse.getPos() != mouse_start):
            RT = timer.getTime()
            mouse_moved = True

        # on click, check for valid move selection
        if mouse.getPressed()[0] == 1:
            mouse_x, mouse_y = mouse.getPos()
            row_new = round(0 - ((mouse_y * 17) + 8 - 15))
            col_new = round((mouse_x * 17) + 7)
            if row_new <= row and col_new <= col:
                if row_new >= 0 and col_new >= 0:
                    if row_new==row or col_new==col or (section != 4 and row-row_new == col-col_new):
                        if row_new != row or col_new != col:
                            if section != 4 or int(expInfo['session']) % 2 == 1 or euclid_move((row,col), (row_new,col_new)):
                                continueRoutine = False

        # draw game board
        for square in squares:
            square.draw()
      End Routine:
        if npc_start == False:
            move_num = move_num + 1
            df = df.append(pd.Series(dtype = 'object'), ignore_index = True)
            df.loc[len(df) - 1, 'session'] = expInfo['session']
            df.loc[len(df) - 1, 'section'] = section
            if abs(section) == 4 and int(expInfo['session']) % 2 == 0:
                df.loc[len(df) - 1, 'type'] = 'euc'
            if abs(section) == 4 and int(expInfo['session']) % 2 == 1:
                df.loc[len(df) - 1, 'type'] = 'nim'
            df.loc[len(df) - 1, 'game'] = game
            df.loc[len(df) - 1, 'move_num'] = move_num
            df.loc[len(df) - 1, 'player'] = 'human'
            df.loc[len(df) - 1, 'start_row'] = row
            df.loc[len(df) - 1, 'start_col'] = col
            df.loc[len(df) - 1, 'end_row'] = row_new
            df.loc[len(df) - 1, 'end_col'] = col_new
            df.loc[len(df) - 1, 'RT'] = RT
            df.loc[len(df) - 1, 'DT'] = timer.getTime()
            #print(df.to_string())

        for i, square in enumerate(squares):
            if square_coords[i] == (0,0):
                square.fillColor = 'lightgreen'
            else:
                if sum(square_coords[i]) % 2 == 0:
                    square.fillColor = 'lightgray'
                else:
                    square.fillColor = 'darkgray'
    PolygonComponent piece
      fillColor = dodgerblue
      lineColor = dodgerblue
      pos [set every repeat] = ((col-7)/17, (15-row-8)/17)
      saveStartStop = False
      shape = circle
      size = (1/19, 1/19)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      saveParamsClickable = name
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.05
      pos = (0, 0.465)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Your turn
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  Routine npc_move
    CodeComponent npc_code
      Code Type = Auto->JS
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      Begin Routine:
        event.Mouse(visible=False)

        #timer = core.Clock()
        #timer.reset()

        if practice_turns.finished or visibility == 0:
            continueRoutine = False
      Each Frame:
        for square in squares:
            square.draw()

        #if timer.getTime() > move_duration:
        #    continueRoutine = False
      End Routine:
        if row_new == col_new == 0:
            if player_won == None:
                player_won = False
            practice_turns.finished = True
            if section == 1:
                turns.finished = True
            if section == 3:
                more_turns.finished = True
            if section == -4:
                tutorial_turns.finished = True
            if section == 4:
                turns_4.finished = True
    PolygonComponent moving_npc
      fillColor = chestnut
      lineColor = chestnut
      opacity [set every repeat] = visibility
      pos [set every frame] = ((((1-min(move_duration,t)/move_duration)*col+min(move_duration,t)/move_duration*col_new)-7)/17, (15-((1-min(move_duration,t)/move_duration)*row+min(move_duration,t)/move_duration*row_new)-8)/17)
      saveStartStop = False
      shape = circle
      size = (1/19, 1/19)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = move_duration
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  Routine npc_wait
    CodeComponent wait_code
      Code Type = Auto->JS
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      Begin Experiment:
        import math

        optimal_moves_wythoffs = [(0,0),(1,2),(2,1),(3,5),(5,3),(4,7), (7,4),(6,10),(10,6),(8,13),(13,8)]

        optimal_moves_nim = []
        for i in range(15):
            optimal_moves_nim.append((i,i))

        optimal_moves_euclid = []
        for r in range(15):
            for c in range(15):
                if  r == c == 0:
                    optimal_moves_euclid.append((r,c))
                elif min(r,c) / max(r,c) > (1 + math.sqrt(5)) / 2:
                    optimal_moves_euclid.append((r,c))

        def euclid_move(pos1, pos2):
            (r1, c1) = pos1
            (r2, c2) = pos2

            if r2 > r1 or c2 > c1: return False

            elif r1 == 0 or c1 == 0:

                if r1 == 0:
                    if c2 < c1: return True
                    else: return False
                if c1 == 0:
                    if r2 < r1: return True
                    else: return False

            else:
                if r1 == c1:
                    if r2 == 0 and c2 == c1: return True
                    if c2 == 0 and r2 == r1: return True
                    return False

                if r1 > c1 and r2 < r1:
                    if (r1 - r2) % c1 == 0: return True
                    else: return False

                if c1 > r1 and c2 < c1:
                    if (c1 - c2) % r1 == 0: return True
                    else: return False

            return False
      Begin Routine:
        event.Mouse(visible=False)

        if practice_turns.finished:
            continueRoutine = False

        row = row_new
        col = col_new

        # select random opponent move
        moves = []
        Q_table = []

        if abs(section) != 4:
            optimal_moves = optimal_moves_wythoffs
        else:
            if int(expInfo['session']) % 2 == 0:
                optimal_moves = optimal_moves_euclid
            else:
                optimal_moves = optimal_moves_nim

        for r in range (row): # vertical moves
            move = (r, col)
            if abs(section) != 4 or int(expInfo['session']) % 2 == 1 or euclid_move((row,col), move):
                moves.append(move)
                if move in optimal_moves:
                    Q_table.append(1)
                else:
                    Q_table.append(0)

        for c in range (col): # horiz moves
            move = (row, c)
            if abs(section) != 4 or int(expInfo['session']) % 2 == 1 or euclid_move((row,col), move):
                moves.append(move)
                if move in optimal_moves:
                    Q_table.append(1)
                else:
                    Q_table.append(0)

        for d in range(1, min(row, col) + 1): # diag moves
            move = (row - d, col - d)
            if abs(section) != 4:
                moves.append(move)
                if move in optimal_moves:
                    Q_table.append(1)
                else:
                    Q_table.append(0)

        # action selection
        if len(moves) > 0:
            # calculate Boltzmann (softmax) action probs
            T = 0.55 # temperature parameter
            probs = np.exp(np.true_divide(Q_table,T))
            probs = np.true_divide(probs, sum(probs))
            action = np.random.choice(len(moves),p=probs)
            (row_new, col_new) = moves[action]
            # better to use np.random.Generator.choice

        # choose fixed move if move 1 and starting
        if npc_start == True:
            (row_new, col_new) = start_locs[game-1][1]
            npc_start = False
      Each Frame:
        for square in squares:
            square.draw()
      End Routine:
        if practice_turns.finished == False:
            move_num = move_num + 1
            df = df.append(pd.Series(dtype = 'object'), ignore_index = True)
            df.loc[len(df) - 1, 'session'] = expInfo['session']
            df.loc[len(df) - 1, 'section'] = section
            if abs(section) == 4 and int(expInfo['session']) % 2 == 0:
                df.loc[len(df) - 1, 'type'] = 'euc'
            if abs(section) == 4 and int(expInfo['session']) % 2 == 1:
                df.loc[len(df) - 1, 'type'] = 'nim'
            df.loc[len(df) - 1, 'game'] = game
            df.loc[len(df) - 1, 'move_num'] = move_num
            df.loc[len(df) - 1, 'player'] = 'AI'
            df.loc[len(df) - 1, 'start_row'] = row
            df.loc[len(df) - 1, 'start_col'] = col
            df.loc[len(df) - 1, 'end_row'] = row_new
            df.loc[len(df) - 1, 'end_col'] = col_new
            df.loc[len(df) - 1, 'DT'] = 1.25
            #print(df.to_string())
    PolygonComponent npc
      fillColor = chestnut
      lineColor = chestnut
      pos [set every repeat] = ((col-7)/17, (15-row-8)/17)
      saveStartStop = False
      shape = circle
      size = (1/19, 1/19)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.25
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  Routine setup_instruct
    CodeComponent setup_code
      Code Type = Auto->JS
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      Begin Experiment:
        # Make game board tiles for rendering later

        squares = []
        square_coords = []

        for row in range(15):
            for col in range(15):

                if (row, col) == (0, 0):
                    color = 'lightgreen'
                elif (row + col) % 2 == 0:
                    color = 'lightgray'
                else:
                    color = 'darkgray'

                y_loc = ((15 - row) - 8) / 17
                x_loc = (col - 7) / 17

                squares.append(
                    visual.Rect(
                        win = win,
                        width = 1/17,
                        height = 1/17,
                        pos = (x_loc, y_loc),
                        fillColor = color))
                square_coords.append((row, col))
      Begin Routine:
        import random
        import numpy as np
        import pandas as pd


        npc_starts = [False, True, False]
        start_locs = [[(9,12)],[(12,9),(7,4)],[(4,10)]]
        num_games = len(npc_starts)

        game = 0 # initialize game counter
        num_wins = 0 # initialize win counter
        visibility = 1 # pieces are visible for Section 0/1
        section = -1 # variable for experiment section
        move_duration = 1 # how long moves take
        end_pause_duration = 0.75 # game-end pause amt

        # create tidy DataFrame to hold game record
        df = pd.DataFrame()
        df['session'] = []
        df['section'] = []
        df['type'] = []
        df['game'] = []
        df['ref_game'] = []
        df['move_num'] = []
        df['player'] = []
        df['start_row'] = []
        df['start_col'] = []
        df['end_row'] = []
        df['end_col'] = []
        df['RT'] = []
        df['DT'] = []
        df['winner'] = []
        df['chosen_winner'] = []
        df = df.astype('object')
        #print(df)
    TextComponent title_text
      color = gold
      letterHeight = 0.1
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Wythoff's Game Experiment
      wrapWidth = 1.3
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    TextComponent overview_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text:
        Welcome! Please read all instructions carefully.

        This experiment will have 4 sections.
        You will be playing a virtual board game.
        Click the button below for the tutorial.
    PolygonComponent start_button
      fillColor = white
      lineColor = silver
      lineWidth = 8
      pos = (0, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent button_label
      color = grey
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = begin!
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    MouseComponent start_mouse
      clickable = start_button
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine countdown
    CodeComponent countdown_code
      Code Type = Auto->JS
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      Begin Routine:
        event.Mouse(visible=False)

        import random
        import math

        if section == 1 or section == 3 or section == 4 or section == -4:
            practice_turns.finished = False

        player_won = None
        npc_start = npc_starts[game]
        game = game + 1

        move_num = 0 # initialize move counter

        #row = random.randint(0,14)
        #col = random.randint(0,14)
        #while row == col == 0:
        #    row = random.randint(0,14)
        #    col = random.randint(0,14)
        (row, col) = start_locs[game-1][0]

        row_new = row
        col_new = col
      Each Frame:
        for square in squares:
            square.draw()
    TextComponent countdown_text
      letterHeight = 0.05
      pos = (0, 0.465)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every frame] = $(3 - math.floor(t))
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    PolygonComponent blue_piece
      fillColor = dodgerblue
      lineColor = dodgerblue
      opacity [set every repeat] = 1 - npc_start
      pos [set every repeat] = ((col-7)/17, (15-row-8)/17)
      saveStartStop = False
      shape = circle
      size = (1/19, 1/19)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent red_piece
      fillColor = chestnut
      lineColor = chestnut
      opacity [set every repeat] = npc_start
      pos [set every repeat] = ((col-7)/17, (15-row-8)/17)
      saveStartStop = False
      shape = circle
      size = (1/19, 1/19)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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  Routine end_pause
    CodeComponent end_code
      Code Type = Auto->JS
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      Begin Routine:
        event.Mouse(visible=False)

        row = row_new
        col = col_new

        if visibility == 0:
            continueRoutine = False

        #print(df.to_string())
      Each Frame:
        for square in squares:
            square.draw()
    PolygonComponent end_blue
      fillColor = dodgerblue
      lineColor = dodgerblue
      opacity [set every repeat] = player_won
      pos [set every repeat] = ((col-7)/17, (15-row-8)/17)
      saveStartStop = False
      shape = circle
      size = (1/19, 1/19)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = end_pause_duration
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    PolygonComponent end_red
      fillColor = chestnut
      lineColor = chestnut
      opacity [set every repeat] = 1 - player_won
      pos [set every repeat] = ((col-7)/17, (15-row-8)/17)
      saveStartStop = False
      shape = circle
      size = (1/19, 1/19)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = end_pause_duration
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  Routine feedback
    CodeComponent feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        event.Mouse(visible=True)

        if player_won:
            df.loc[(df.game==game) & (df.section==section), 'winner'] = 'human'
        else:
            df.loc[(df.game==game) & (df.section==section), 'winner'] = 'AI'
    TextComponent feedback_win
      color = gold
      letterHeight = 0.1
      opacity [set every repeat] = player_won
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = YOU WON!
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    TextComponent feedback_lose
      color = orange
      letterHeight = 0.1
      opacity [set every repeat] = 1 - player_won
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = YOU LOST!
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    TextComponent status_text
      letterHeight = 0.05
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text [set every repeat] = $'games played: ' + str(game) + ' of ' + str(num_games) + '\nwin percentage: ' + str(round (num_wins / game * 100)) + '%'
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    PolygonComponent button
      fillColor = white
      lineColor = silver
      lineWidth = 8
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent button_text
      color = gray
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = proceed
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    MouseComponent next_mouse
      clickable = button
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine tutorial
    CodeComponent tutorial_code
      Code Type = Auto->JS
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      Begin Routine:
        row = 4
        col = 7

        moves = []
        for r in range (row): # vertical moves
            move = (r, col)
            if section != 4 or int(expInfo['session']) % 2 == 1 or euclid_move((row,col), move):
                moves.append(move)

        for c in range (col): # horiz moves
            move = (row, c)
            if section != 4 or int(expInfo['session']) % 2 == 1 or euclid_move((row,col), move):
                moves.append(move)

        for d in range(1, min(row, col) + 1): # diag moves
            move = (row - d, col - d)
            if section != 4:
                moves.append(move)
      Each Frame:
        for i, square in enumerate(squares):
            if square_coords[i] == (0,0):
                square.fillColor = 'lightgreen'
            elif square_coords[i] in moves:
                if sum(square_coords[i]) % 2 == 0:
                    square.fillColor = (0.6550, 0.8550, 0.6550)
                else:
                    square.fillColor = (0.3255, 0.5255, 0.3255)
            square.draw()
      End Routine:
        for i, square in enumerate(squares):
            if square_coords[i] == (0,0):
                square.fillColor = 'lightgreen'
            else:
                if sum(square_coords[i]) % 2 == 0:
                    square.fillColor = 'lightgray'
                else:
                    square.fillColor = 'darkgray'
    PolygonComponent board_outline
      fillColor = None
      lineColor = black
      lineWidth = 20
      saveStartStop = False
      shape = rectangle
      size = (15/17, -15/17)
      startVal [time (s)] = 0.0
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    PolygonComponent begin_button
      fillColor = white
      lineColor = silver
      lineWidth = 8
      pos = (0.6, -0.35)
      saveStartStop = False
      shape = rectangle
      size = (0.2, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent begin_text
      color = grey
      letterHeight = 0.05
      pos = (0.6, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = ready!
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    MouseComponent tutorial_mouse
      clickable = begin_button
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent tutorial_title
      letterHeight = 0.05
      pos = (0, 0.47)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Tutorial
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    PolygonComponent box_1
      anchor = top-right
      fillColor = black
      lineColor = black
      lineWidth = 20
      pos = (-15/17/2, 15/17/2)
      saveStartStop = False
      shape = rectangle
      size = (0.3, 2/17)
      startVal [time (s)] = 0.0
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    TextComponent text_1
      letterHeight = 0.05
      pos = (-0.595, 13/17/2)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        1) This is the
        game board.
    PolygonComponent arrow
      anchor = top-center
      fillColor = black
      lineColor = none
      ori = -45
      pos = (-13.25/17/2, 13.25/17/2)
      saveStartStop = False
      shape = arrow
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
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    PolygonComponent box_2
      fillColor = black
      lineColor = black
      lineWidth = 20
      pos = (-17.5/17/2, 7.5/17/2)
      saveStartStop = False
      shape = rectangle
      size = (0.35, 2/17)
      startVal [time (s)] = 0.0
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    TextComponent text_2
      letterHeight = 0.05
      pos = (-17.5/17/2, 7.5/17/2)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        2) The top-left
        spot is the goal.
    PolygonComponent tutorial_piece
      fillColor = dodgerblue
      lineColor = dodgerblue
      pos = ((7-7)/17, (15-4-8)/17)
      saveStartStop = False
      shape = circle
      size = (1/19, 1/19)
      startVal [time (s)] = 0.0
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    PolygonComponent left_arrow
      fillColor = black
      lineColor = none
      ori = -90
      pos = ((5.75-7)/17, (15-4-8)/17)
      saveStartStop = False
      shape = arrow
      size = (1/20, 1/20)
      startVal [time (s)] = 0.0
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    PolygonComponent up_arrow
      fillColor = black
      lineColor = none
      pos = ((7-7)/17, (15-2.75-8)/17)
      saveStartStop = False
      shape = arrow
      size = (1/20, 1/20)
      startVal [time (s)] = 0.0
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    PolygonComponent up_left_arrow
      fillColor = black
      lineColor = none
      ori = -45
      pos = ((6.05-7)/17, (15-3.05-8)/17)
      saveStartStop = False
      shape = arrow
      size = (1/20, 1/20)
      startVal [time (s)] = 0.0
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    PolygonComponent box_3
      fillColor = black
      lineColor = black
      lineWidth = 20
      pos = (8/17/2, 1/17/2)
      saveStartStop = False
      shape = rectangle
      size = (6/17, 8/17)
      startVal [time (s)] = 0.0
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    TextComponent text_3
      letterHeight = 0.05
      pos = (8/17/2, 1/17/2)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        3) This is the
        game piece. It
        can move any
        number of spots
        up, left, or up-
        left diagonally.
        It turns red for
        opponent turns.
    PolygonComponent box_4
      fillColor = black
      lineColor = black
      lineWidth = 20
      pos = (20/17/2, -4/17/2)
      saveStartStop = False
      shape = rectangle
      size = (4/17, 3.5/17)
      startVal [time (s)] = 0.0
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    TextComponent text_4
      letterHeight = 0.05
      pos = (20/17/2, -4/17/2)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        4) starting
        spot and
        player are
        random.
    PolygonComponent box_5
      fillColor = black
      lineColor = black
      lineWidth = 20
      pos = (0, -13/17/2)
      saveStartStop = False
      shape = rectangle
      size = (16/17, 2/17)
      startVal [time (s)] = 0.0
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    TextComponent text_5
      letterHeight = 0.05
      pos = (0/17/2, -13/17/2)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        5) Available moves are highlighted in green
        for only the first 2 of 3 tutorial games.
  Routine section_1
    TextComponent title_1
      letterHeight = 0.1
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Starting Experiment Section 1
      wrapWidth = 1.4
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    PolygonComponent button_1
      fillColor = white
      lineColor = silver
      lineWidth = 8
      pos = (0, -0.15)
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent button_1_text
      color = gray
      letterHeight = 0.05
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = proceed
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    MouseComponent mouse_1
      clickable = button_1
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent section_1_text
      letterHeight = 0.05
      pos = (0, 0.075)
      startVal [time (s)] = 0.0
      text [set every repeat] = Click the button below when you are ready to start playing.
      wrapWidth = 0.75
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    CodeComponent section_1_code
      Code Type = Auto->JS
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      Begin Routine:
        num_games = 2 # must be even
        assert(num_games % 2 == 0)

        # generate shuffled list of who starts each game
        #npc_starts = []
        #for game in range(int(num_games/2)):
        #    npc_starts.append(True)
        #    npc_starts.append(False)
        #random.shuffle(npc_starts)

        #npc_starts = [True, True, False, False, False, True, True, True, False, True, False, False, True, False, True, True, False, False, False, True, False, False, True, True, False, True, False, False, True, True]
        #start_locs = [[(9, 6), (7, 4)], [(13, 2), (7, 2)], [(4, 12)], [(7, 2)], [(12, 3)], [(7, 10), (7, 8)], [(2, 14), (2, 7)], [(8, 10), (7, 10)], [(12, 7)], [(1, 12), (1, 5)], [(4, 2)], [(11, 1)], [(8, 13), (5, 13)], [(1, 3)], [(4, 8), (4, 7)], [(6, 14), (6, 5)], [(8, 4)], [(5, 6)], [(6, 4)], [(4, 3), (2, 3)], [(2, 5)], [(9, 11)], [(1, 14), (1, 6)], [(3, 10), (3, 5)], [(2, 9)], [(8, 10), (8, 1)], [(10, 11)], [(3, 11)], [(4, 7), (2, 5)], [(7, 9), (7, 1)]]

        npc_starts = [True, False]
        start_locs = [[(9, 6), (7, 4)], [(4, 12)]]


        game = 0 # initialize game counter
        num_wins = 0 # initialize win counter
        visibility = 1 # pieces are visible for Section 1
        section = 1 # variable for experiment section

        practice_turns.finished = False
  Routine section_2
    CodeComponent section_2_code
      Code Type = Auto->JS
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      Begin Routine:
        # shuffle order of reference games
        #game_idxs = []
        #for game in range(num_games):
        #    game_idxs.append(game + 1)
        #random.shuffle(game_idxs)

        #game_idxs = [6, 20, 12, 4, 11, 7, 24, 9, 29, 21, 15, 25, 27, 1, 19, 8, 18, 3, 2, 13, 10, 28, 17, 14, 23, 22, 16, 26, 5, 30]
        game_idxs = [2, 1]

        game_idx = 0 # initialize game index counter
        section = 2 # variable for experiment section
        move_duration = 0.75 # how long moves take
        end_pause_duration = 0.75*0.75 # game-end pause amt

        # generate balanced shuffled blinks for distractor
        #blinks = []
        #for game in range(int(num_games/2)):
        #    blinks.append(True)
        #    blinks.append(False)
        #random.shuffle(blinks)
        blinks = [True, False, False, True, True, True, True, True, False, False, False, True, False, True, False, False, False, True, False, True, True, False, True, True, False, True, False, False, False, True]
    TextComponent title_2
      letterHeight = 0.1
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Starting Experiment Section 2
      wrapWidth = 1.4
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    PolygonComponent button_2
      fillColor = white
      lineColor = silver
      lineWidth = 8
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent button_2_text
      color = gray
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = proceed
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    MouseComponent mouse_2
      clickable = button_2
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent section_2_text
      letterHeight = 0.05
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text [set every repeat] = Click the button below when you are ready to start the section.
      wrapWidth = 1
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  Routine instruct_recall
    CodeComponent recall_code
      Code Type = Auto->JS
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      Begin Routine:
        # skip instructions if not recall condition
        if int(expInfo['session']) % 3 != 1:
            continueRoutine = False
    TextComponent recall_title
      letterHeight = 0.1
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Experiment Section 2 Instructions
      wrapWidth = 1.5
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    PolygonComponent recall_button
      fillColor = white
      lineColor = silver
      lineWidth = 8
      pos = (0, -0.3)
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent recall_ready
      color = gray
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = ready!
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    MouseComponent recall_mouse
      clickable = recall_button
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent recall_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.1
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      text [set every repeat]:
        In this section you will view game replays.

        At the end of each replay, you will be asked who won the game (you vs. the opponent).

        Please pay attention and respond as best you can!
  Routine instruct_imagine
    CodeComponent imagine_code
      Code Type = Auto->JS
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      Begin Routine:
        # skip instructions if not imagination condition
        if int(expInfo['session']) % 3 != 0:
            continueRoutine = False
    TextComponent imagine_title
      letterHeight = 0.1
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Experiment Section 2 Instructions
      wrapWidth = 1.5
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    PolygonComponent imagine_button
      fillColor = white
      lineColor = silver
      lineWidth = 8
      pos = (0, -0.35)
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent imagine_ready
      color = gray
      letterHeight = 0.05
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = ready!
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    MouseComponent imagine_mouse
      clickable = imagine_button
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent imagine_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.175
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      text [set every repeat]:
        In this section you will imagine game plays.

        You will be shown a starting position (spot and player) from which to imagine a game from beginning to end. At the end of each imagined game, you will be asked who won (you vs. the opponent). The game board will transition to the question screen automatically.

        Please imagine and respond as best you can!
  Routine intervention_countdown
    CodeComponent intervention_countdown_code
      Code Type = Auto->JS
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      Begin Routine:
        event.Mouse(visible=False)

        # Make sure replay/imagination shows correctly
        if int(expInfo['session']) % 3 == 0:
            visibility = 0
        if int(expInfo['session']) % 3 == 1:
            visibility = 1
        if int(expInfo['session']) % 3 == 2:
            visibility = 0
        #visibility = int(expInfo['session']) % 2
        practice_turns.finished = False

        move_idx = 0

        # select reference game data frame
        df_1 = df[df.section == 1]
        ref_df = df_1[df_1.game == game_idxs[game_idx]]
        ref_df = ref_df.reset_index(drop=True)
        print(ref_df.to_string())
        #print('move_idx: ' + str(move_idx))

        # set starting position
        row = ref_df.loc[move_idx, 'start_row']
        col = ref_df.loc[move_idx, 'start_col']
        row_new = row
        col_new = col
        #print('row: '+ str(row))
        #print('col: '+ str(col))

        winner = ref_df.loc[len(ref_df) - 1, 'winner']
        if winner == 'human':
            player_won = True
        else:
            player_won = False

        if visibility == 0:
            # we add 0.75s for the end_pause and 1s for every move
            whole_game_duration = sum(ref_df['DT']) + len(ref_df['DT']) + 0.75
            prompt_duration = random.uniform(0.5/0.75, whole_game_duration - 1.0/0.75)
            post_blink_duration = whole_game_duration - prompt_duration - 0.5/0.75

        if ref_df.loc[move_idx, 'player'] == 'AI':
            npc_start = True
            piece_color = 'chestnut'
            if (int(expInfo['session']) % 3 == 2) and (blinks[game_idx] == True):
                blink_color = 'dodgerblue'
            else:
                blink_color = 'chestnut'
        else:
            npc_start = False
            piece_color = 'dodgerblue'
            if (int(expInfo['session']) % 3 == 2) and (blinks[game_idx] == True):
                blink_color = 'chestnut'
            else:
                blink_color = 'dodgerblue'

        # advance game idx counter
        game_idx = game_idx + 1
      Each Frame:
        for square in squares:
            square.draw()
    TextComponent intervention_countdown_text
      letterHeight = 0.05
      pos = (0, 0.465)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text [set every frame] = $(3 - math.floor(t))
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    PolygonComponent intervention_blue_piece
      fillColor = dodgerblue
      lineColor = dodgerblue
      opacity [set every repeat] = 1 - npc_start
      pos [set every repeat] = ((col-7)/17, (15-row-8)/17)
      saveStartStop = False
      shape = circle
      size = (1/19, 1/19)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent intervention_red_piece
      fillColor = chestnut
      lineColor = chestnut
      opacity [set every repeat] = npc_start
      pos [set every repeat] = ((col-7)/17, (15-row-8)/17)
      saveStartStop = False
      shape = circle
      size = (1/19, 1/19)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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  Routine intervention_player_wait
    CodeComponent intervention_code
      Code Type = Auto->JS
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      Begin Routine:
        event.Mouse(visible=False)

        if npc_start or visibility == 0:
            continueRoutine = False
        elif row_new == col_new == 0:
            intervention_moves.finished = True
            practice_turns.finished = True
            npc_start = True
            continueRoutine = False
        else:
            print('move_idx: ' + str(move_idx))

            pause_duration = ref_df.loc[move_idx, 'DT']

            row = ref_df.loc[move_idx, 'start_row']
            col = ref_df.loc[move_idx, 'start_col']
            row_new = ref_df.loc[move_idx, 'end_row']
            col_new = ref_df.loc[move_idx, 'end_col']

            move_idx = move_idx + 1
      Each Frame:
        for square in squares:
            square.draw()
    PolygonComponent intervention_piece
      fillColor = dodgerblue
      lineColor = dodgerblue
      pos [set every repeat] = ((col-7)/17, (15-row-8)/17)
      saveStartStop = False
      shape = circle
      size = (1/19, 1/19)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pause_duration * 0.75
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  Routine intervention_npc_wait
    CodeComponent intervention_wait_code
      Code Type = Auto->JS
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      Begin Routine:
        event.Mouse(visible=False)

        npc_start = False # hope this won't cause a bug

        if practice_turns.finished or visibility == 0:
            continueRoutine = False
        elif row_new == col_new == 0:
            intervention_moves.finished = True
            practice_turns.finished = True
            npc_start = True
            continueRoutine = False
        else:
            print('move_idx: ' + str(move_idx))

            pause_duration = ref_df.loc[move_idx, 'DT']

            row = ref_df.loc[move_idx, 'start_row']
            col = ref_df.loc[move_idx, 'start_col']
            row_new = ref_df.loc[move_idx, 'end_row']
            col_new = ref_df.loc[move_idx, 'end_col']

            move_idx = move_idx + 1
      Each Frame:
        for square in squares:
            square.draw()
    PolygonComponent intervention_npc
      fillColor = chestnut
      lineColor = chestnut
      pos [set every repeat] = ((col-7)/17, (15-row-8)/17)
      saveStartStop = False
      shape = circle
      size = (1/19, 1/19)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = pause_duration * 0.75
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  Routine who_won_
  Routine who_won
    CodeComponent who_won_code
      Code Type = Auto->JS
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      Begin Routine:
        if int(expInfo['session']) % 3 == 2:
            continueRoutine = False

        choice_mouse.setPos(newPos=(0,0))
        event.Mouse(visible=True)

        timer = core.Clock()
        timer.reset()
      End Routine:
        if int(expInfo['session']) % 3 != 2:
            df = df.append(pd.Series(dtype = 'object'), ignore_index = True)
            df.loc[len(df) - 1, 'session'] = expInfo['session']
            df.loc[len(df) - 1, 'section'] = section
            if int(expInfo['session']) % 3 == 0:
                df.loc[len(df) - 1, 'type'] = 'img'
            else:
                df.loc[len(df) - 1, 'type'] = 'rep'
            df.loc[len(df) - 1, 'game'] = game_idx
            df.loc[len(df) - 1, 'ref_game'] = game_idxs[game_idx - 1]
            df.loc[len(df) - 1, 'start_row'] = ref_df.loc[0, 'start_row']
            df.loc[len(df) - 1, 'start_col'] = ref_df.loc[0, 'start_col']
            df.loc[len(df) - 1, 'winner'] = ref_df.loc[0, 'winner']
            if choice_mouse.clicked_name[0] == 'me_button':
                df.loc[len(df) - 1, 'chosen_winner'] = 'human'
            else:
                df.loc[len(df) - 1, 'chosen_winner'] = 'AI'
            df.loc[len(df) - 1, 'DT'] = timer.getTime()
    TextComponent who_won_title
      letterHeight = 0.1
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Who won?
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    PolygonComponent opponent_button
      fillColor = white
      lineColor = silver
      lineWidth = 8
      pos = (-0.3, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent opponent_text
      color = gray
      letterHeight = 0.05
      pos = (-0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = opponent
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    PolygonComponent me_button
      fillColor = white
      lineColor = silver
      lineWidth = 8
      pos = (0.3, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent me_text
      color = gray
      letterHeight = 0.05
      pos = (0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = me
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    MouseComponent choice_mouse
      clickable = opponent_button, me_button
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine section_3
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        ## generate shuffled list of who starts each game
        #npc_starts = []
        #for game in range(int(num_games/2)):
        #    npc_starts.append(True)
        #    npc_starts.append(False)
        #random.shuffle(npc_starts)

        #npc_starts = [True, False, False, True, False, False, False, False, True, True, False, True, True, False, True, True, True, True, False, True, False, False, False, False, True, False, True, False, True, True]
        #start_locs = [[(11, 8), (8, 8)], [(3, 12)], [(14, 13)], [(11, 14), (11, 3)], [(9, 5)], [(10, 13)], [(8, 6)], [(5, 6)], [(12, 7), (12, 2)], [(7, 13), (1, 13)], [(14, 10)], [(2, 7), (2, 6)], [(9, 3), (6, 0)], [(8, 9)], [(10, 2), (0, 2)], [(10, 4), (8, 4)], [(3, 1), (2, 1)], [(1, 4), (1, 0)], [(6, 8)], [(4, 5), (3, 5)], [(2, 1)], [(5, 1)], [(9, 12)], [(8, 7)], [(3, 13), (3, 5)], [(1, 6)], [(5, 11), (3, 9)], [(8, 6)], [(2, 12), (0, 12)], [(1, 14), (1, 9)]]
        npc_starts = [True, False]
        start_locs = [[(11, 8), (8, 8)], [(3, 12)]]


        game = 0 # initialize game counter
        num_wins = 0 # initialize win counter
        visibility = 1 # pieces are visible for Section 3
        section = 3 # variable for experiment section
        move_duration = 1 # how long moves take
        end_pause_duration = 0.75 # game-end pause amt
    TextComponent title_3
      letterHeight = 0.1
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Starting Experiment Section 3
      wrapWidth = 1.4
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    PolygonComponent button_3
      fillColor = white
      lineColor = silver
      lineWidth = 8
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent button_3_text
      color = gray
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = proceed
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    MouseComponent mouse_3
      clickable = button_3
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent section_3_text
      letterHeight = 0.05
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text [set every repeat] = In this section you will play more games like in Section 1. Click the button below when you are ready to start.
      wrapWidth = 1
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  Routine imagination_prompt
    CodeComponent prompt_code
      Code Type = Auto->JS
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      Begin Routine:
        event.Mouse(visible=False)

        if visibility == 1:
            continueRoutine = False
      Each Frame:
        for square in squares:
            square.draw()
    PolygonComponent prompt_piece
      fillColor [set every repeat] = $piece_color
      lineColor [set every repeat] = $piece_color
      pos [set every repeat] = ((col-7)/17, (15-row-8)/17)
      saveStartStop = False
      shape = circle
      size = (1/19, 1/19)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = prompt_duration * 0.75
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  Routine practice_info
    TextComponent title_0
      letterHeight = 0.1
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Starting three practice games
      wrapWidth = 1.4
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    PolygonComponent button_0
      fillColor = white
      lineColor = silver
      lineWidth = 8
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent button_0_text
      color = gray
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = proceed
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    MouseComponent mouse_0
      clickable = button_0
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent section_0_text
      letterHeight = 0.05
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text = Click the button below to play three practice games before starting experiment section 1.
      wrapWidth = 1.0
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  Routine end_screen
    TextComponent end_title
      letterHeight = 0.1
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Experiment sections complete
      wrapWidth = 1.4
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    PolygonComponent end_button
      fillColor = white
      lineColor = silver
      lineWidth = 8
      pos = (0, -0.35)
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent end_button_text
      color = gray
      letterHeight = 0.05
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = done
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    TextComponent end_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.2
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      text [set every repeat]:
        You have now completed all sections of the experiment.

        Please alert the experimenter that you are finished.

        Thank you!
    MouseComponent end_mouse
      clickable = end_button
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent end_code_2
      Code Type = Auto->JS
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      Begin Routine:
        filepath = 'tidy_tables/' + expInfo['session'] + '_' + expInfo['participant'] + '.csv'

        df.to_csv(filepath)

        print(df.to_string())
  Routine section_4
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        ## generate shuffled list of who starts each game
        #npc_starts = []
        #for game in range(int(num_games/2)):
        #    npc_starts.append(True)
        #    npc_starts.append(False)
        #random.shuffle(npc_starts)

        #if int(expInfo['session']) % 2 == 1: # Nim
        #    npc_starts = [True, False, True, False, False, True, False, True, True, True, True, False, False, False, True, True, False, False, True, True, False, False, False, True, False, True, False, True, True, False]
        #    start_locs = [[(2, 10), (1, 10)], [(7, 11)], [(2, 10), (2, 6)], [(10, 4)], [(12, 7)], [(14, 4), (4, 4)], [(5, 14)], [(2, 1), (1, 1)], [(5, 11), (5, 5)], [(8, 10), (8, 8)], [(10, 14), (4, 14)], [(8, 11)], [(12, 9)], [(5, 14)], [(7, 8), (7, 4)], [(7, 4), (1, 4)], [(11, 2)], [(6, 9)], [(5, 9), (0, 9)], [(11, 10), (11, 5)], [(10, 12)], [(5, 9)], [(1, 8)], [(4, 13), (2, 13)], [(3, 7)], [(9, 8), (8, 8)], [(8, 13)], [(13, 1), (1, 1)], [(4, 13), (4, 1)], [(6, 13)]]
        #else: # Euclid
        #    npc_starts = [False, True, True, False, False, True, True, True, False, False, True, False, False, True, False, True, False, True, False, False, False, True, False, False, True, True, True, True, True, False]
        #    start_locs = [[(11, 8)], [(4, 9), (4, 1)], [(13, 14), (13, 1)], [(4, 2)], [(14, 2)], [(7, 13), (7, 6)], [(14, 8), (6, 8)], [(14, 5), (4, 5)], [(1, 8)], [(7, 11)], [(5, 13), (5, 8)], [(8, 11)], [(7, 6)], [(1, 7), (1, 2)], [(3, 14)], [(7, 10), (7, 3)], [(7, 11)], [(4, 14), (4, 6)], [(10, 2)], [(6, 12)], [(13, 7)], [(1, 9), (1, 8)], [(12, 1)], [(14, 13)], [(7, 4), (3, 4)], [(8, 9), (8, 1)], [(9, 14), (9, 5)], [(5, 3), (2, 3)], [(12, 4), (0, 4)], [(14, 9)]]

        if int(expInfo['session']) % 2 == 1: # Nim
            npc_starts = [True, False]
            start_locs = [[(2, 10), (1, 10)], [(7, 11)]]
        else: # Euclid
            npc_starts = [False, True]
            start_locs = [[(11, 8)], [(4, 9), (4, 1)]]

        num_games = len(npc_starts)


        game = 0 # initialize game counter
        num_wins = 0 # initialize win counter
        visibility = 1 # pieces are visible for Section 3
        section = 4 # variable for experiment section
        move_duration = 1 # how long moves take
        end_pause_duration = 0.75 # game-end pause amt
    TextComponent title_4
      letterHeight = 0.1
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Starting Experiment Section 4
      wrapWidth = 1.4
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    PolygonComponent button_4
      fillColor = white
      lineColor = silver
      lineWidth = 8
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent button_4_text
      color = gray
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = proceed
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    MouseComponent mouse_4
      clickable = button_4
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent section_4_text
      letterHeight = 0.05
      pos = (0, 0.15)
      startVal [time (s)] = 0.0
      text [set every repeat] = Click the button below when you are ready to start the final section.
      wrapWidth = 1
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  Routine blink
    CodeComponent blink_code
      Code Type = Auto->JS
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      Begin Routine:
        event.Mouse(visible=False)

        if visibility == 1:
            continueRoutine = False
      Each Frame:
        for square in squares:
            square.draw()
    PolygonComponent blink_piece
      fillColor [set every repeat] = $blink_color
      lineColor [set every repeat] = $blink_color
      pos [set every repeat] = ((col-7)/17, (15-row-8)/17)
      saveStartStop = False
      shape = circle
      size = (1/19, 1/19)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine post_blink
    CodeComponent post_blink_code
      Code Type = Auto->JS
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      Begin Routine:
        event.Mouse(visible=False)

        if visibility == 1:
            continueRoutine = False
      Each Frame:
        for square in squares:
            square.draw()
    PolygonComponent post_blink_piece
      fillColor [set every repeat] = $piece_color
      lineColor [set every repeat] = $piece_color
      pos [set every repeat] = ((col-7)/17, (15-row-8)/17)
      saveStartStop = False
      shape = circle
      size = (1/19, 1/19)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = post_blink_duration * 0.75
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  Routine post_blink_2
  Routine instruct_blink
    CodeComponent blink_instruct_code
      Code Type = Auto->JS
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      Begin Routine:
        # skip instructions if not blink condition
        if int(expInfo['session']) % 3 != 2:
            continueRoutine = False
    TextComponent blink_title
      letterHeight = 0.1
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Experiment Section 2 Instructions
      wrapWidth = 1.5
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    PolygonComponent blink_button
      fillColor = white
      lineColor = silver
      lineWidth = 8
      pos = (0, -0.35)
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent blink_ready
      color = gray
      letterHeight = 0.05
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = ready!
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    MouseComponent blink_mouse
      clickable = blink_button
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent blink_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.175
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      text [set every repeat]:
        In this section you will detect piece "blinks".

        You will watch unmoving game pieces which may or may not blink (briefly change color). After some time, you will be asked if the game piece blinked. The game board will transition to the question screen automatically.

        Please pay attention and respond as best you can!
  Routine instruct_euclid
    CodeComponent euclid_code
      Code Type = Auto->JS
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      Begin Routine:
        # skip instructions if not Euclid condition
        if int(expInfo['session']) % 2 != 0:
            continueRoutine = False
        else:
            npc_starts = [False, True, False]
            start_locs = [[(14, 3)], [(10, 11), (10, 1)], [(4, 10)]]
            num_games = len(npc_starts)

            game = 0 # initialize game counter
            num_wins = 0 # initialize win counter
            visibility = 1 # pieces are visible for Section 3
            section = -4 # variable for experiment section
            move_duration = 1 # how long moves take
            end_pause_duration = 0.75 # game-end pause amt
    TextComponent euclid_title
      letterHeight = 0.1
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Experiment Section 4 Instructions
      wrapWidth = 1.5
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    PolygonComponent euclid_button
      fillColor = white
      lineColor = silver
      lineWidth = 8
      pos = (0, -0.35)
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent euclid_ready
      color = gray
      letterHeight = 0.05
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = do tutorial!
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    MouseComponent euclid_mouse
      clickable = euclid_button
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent euclid_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.25
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      text [set every repeat]:
        In this section you will play a new game called "Euclid".

        The rules of Euclid are the same as the rules of Wythoff's (the game you've been playing) except:
        1) Diagonal moves aren’t possible.
        2) You move by ‘subtracting’ a multiple of one coordinate value from the other while staying within the grid.
        3) The top left goal square is (0,0).
        4) You can still move as many spaces as you like along the top and left edges.

        Please play as best you can!
  Routine instruct_nim
    CodeComponent nim_code
      Code Type = Auto->JS
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      Begin Routine:
        # skip instructions if not Nim condition
        if int(expInfo['session']) % 2 != 1:
            continueRoutine = False
        else:
            npc_starts = [False, True, False]
            start_locs = [[(2, 6)], [(2, 8), (2, 2)], [(4, 13)]]
            num_games = len(npc_starts)

            game = 0 # initialize game counter
            num_wins = 0 # initialize win counter
            visibility = 1 # pieces are visible for Section 3
            section = -4 # variable for experiment section
            move_duration = 1 # how long moves take
            end_pause_duration = 0.75 # game-end pause amt
    TextComponent nim_title
      letterHeight = 0.1
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Experiment Section 4 Instructions
      wrapWidth = 1.5
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    PolygonComponent nim_button
      fillColor = white
      lineColor = silver
      lineWidth = 8
      pos = (0, -0.35)
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent nim_ready
      color = gray
      letterHeight = 0.05
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = do tutorial!
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    MouseComponent nim_mouse
      clickable = nim_button
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent nim_text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.175
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      text [set every repeat]:
        In this section you will play a new game called "Nim".

        The rules of Nim are the same as the rules of Wythoff's (the game you've been playing) except diagonal moves aren't possible.

        Please play as best you can!
  Routine blink_response
    CodeComponent blink_resp_code
      Code Type = Auto->JS
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      Begin Routine:
        if int(expInfo['session']) % 3 != 2:
            continueRoutine = False

        blink_choice_mouse.setPos(newPos=(0,0))
        event.Mouse(visible=True)

        timer = core.Clock()
        timer.reset()
      End Routine:
        if int(expInfo['session']) % 3 == 2:
            df = df.append(pd.Series(dtype = 'object'), ignore_index = True)
            df.loc[len(df) - 1, 'session'] = expInfo['session']
            df.loc[len(df) - 1, 'section'] = section
            df.loc[len(df) - 1, 'type'] = 'dis'
            df.loc[len(df) - 1, 'game'] = game_idx
            df.loc[len(df) - 1, 'ref_game'] = game_idxs[game_idx - 1]
            df.loc[len(df) - 1, 'start_row'] = ref_df.loc[0, 'start_row']
            df.loc[len(df) - 1, 'start_col'] = ref_df.loc[0, 'start_col']
            if blinks[game_idx-1] == True:
                df.loc[len(df) - 1, 'winner'] = 'blink'
            else:
                df.loc[len(df) - 1, 'winner'] = 'no_blink'
            if blink_choice_mouse.clicked_name[0] == 'yes_blink_button':
                df.loc[len(df) - 1, 'chosen_winner'] = 'blink'
            else:
                df.loc[len(df) - 1, 'chosen_winner'] = 'no_blink'
            df.loc[len(df) - 1, 'DT'] = timer.getTime()
    TextComponent blink_resp_title
      letterHeight = 0.1
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Was there a blink?
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    PolygonComponent no_blink_button
      fillColor = white
      lineColor = silver
      lineWidth = 8
      pos = (-0.3, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent no_blink_text
      color = gray
      letterHeight = 0.05
      pos = (-0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = no blink
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    PolygonComponent yes_blink_button
      fillColor = white
      lineColor = silver
      lineWidth = 8
      pos = (0.3, 0)
      saveStartStop = False
      shape = rectangle
      size = (0.25, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent yes_blink_text
      color = gray
      letterHeight = 0.05
      pos = (0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = blink
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    MouseComponent blink_choice_mouse
      clickable = no_blink_button, yes_blink_button
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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Flow
  Routine setup_instruct
  Routine tutorial
  Routine practice_info
  LoopInitiator practice_games loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = num_games
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    Routine countdown
    LoopInitiator practice_turns loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 15
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      Routine select_move
      Routine make_move
      Routine npc_wait
      Routine npc_move
    LoopTerminator practice_turns
    Routine end_pause
    Routine feedback
  LoopTerminator practice_games
  LoopInitiator double_click_1 loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine section_1
  LoopTerminator double_click_1
  LoopInitiator games loopType="TrialHandler"
    loopType = random
    nReps = num_games
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    Routine countdown
    LoopInitiator turns loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = 15
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      Routine select_move
      Routine make_move
      Routine npc_wait
      Routine npc_move
    LoopTerminator turns
    Routine end_pause
    Routine feedback
  LoopTerminator games
  Routine instruct_recall
  Routine instruct_imagine
  Routine instruct_blink
  LoopInitiator double_click_2 loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine section_2
  LoopTerminator double_click_2
  LoopInitiator intervention_games loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = num_games
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    Routine intervention_countdown
    Routine imagination_prompt
    Routine blink
    Routine post_blink
    LoopInitiator intervention_moves loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 15
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      Routine intervention_player_wait
      Routine make_move
      Routine intervention_npc_wait
      Routine npc_move
    LoopTerminator intervention_moves
    Routine end_pause
    Routine who_won
    Routine blink_response
  LoopTerminator intervention_games
  LoopInitiator double_click_3 loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine section_3
  LoopTerminator double_click_3
  LoopInitiator more_games loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = num_games
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    Routine countdown
    LoopInitiator more_turns loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 15
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      Routine select_move
      Routine make_move
      Routine npc_wait
      Routine npc_move
    LoopTerminator more_turns
    Routine end_pause
    Routine feedback
  LoopTerminator more_games
  Routine instruct_euclid
  Routine instruct_nim
  LoopInitiator tutorial_games loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 3
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    Routine countdown
    LoopInitiator tutorial_turns loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 15
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      Routine select_move
      Routine make_move
      Routine npc_wait
      Routine npc_move
    LoopTerminator tutorial_turns
    Routine end_pause
    Routine feedback
  LoopTerminator tutorial_games
  LoopInitiator double_click_4 loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine section_4
  LoopTerminator double_click_4
  LoopInitiator new_games loopType="TrialHandler"
    loopType = random
    nReps = num_games
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    Routine countdown
    LoopInitiator turns_4 loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 15
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      Routine select_move
      Routine make_move
      Routine npc_wait
      Routine npc_move
    LoopTerminator turns_4
    Routine end_pause
    Routine feedback
  LoopTerminator new_games
  Routine end_screen
